PsychoPy2experiment version="2023.2.1"
Settings
  Data filename = u'%s_%s_%s.csv' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'condition': "['A', 'B', 'C', 'D']"}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['resources/bagel_plain.jpg', 'resources/air_popcorn.jpg', 'resources/american_cheese.jpg', 'resources/apple_slices.jpg', 'resources/avacado.jpg', 'resources/baby_cheese.jpg', 'resources/bagel_and_cc.jpg', 'resources/baguette_oil.jpg', 'resources/baked_potato.jpg', 'resources/banana.jpg', 'resources/blank.png', 'resources/broccoli_cauliflower.jpg', 'resources/brownie.jpg', 'resources/burger.jpg', 'resources/celery_and_carrot_sticks.jpg', 'resources/cheese_nachos.jpg', 'resources/cherries.jpg', 'resources/cherry_tomato.jpg', 'resources/chicken_nuggets.jpg', 'resources/cookies.jpg', 'resources/corn_cob.jpg', 'resources/cucumber_slices.jpg', 'resources/cupcakes_am.jpg', 'resources/doughnuts.jpg', 'resources/eggs.jpg', 'resources/food_list_eng.xlsx', 'resources/french_fries.jpg', 'resources/fried_eggs.jpg', 'resources/froot_loops_w_milk.jpg', 'resources/granola_w_milk.jpg', 'resources/grapes.jpg', 'resources/green_beans.jpg', 'resources/grilled_cheese.jpg', 'resources/grilled_chicken_strips.jpg', 'resources/hershey_kisses.jpg', 'resources/hotdog_w_must.jpg', 'resources/ice_cream_sundae.jpg', 'resources/keyboard.jpg', 'resources/kiwi.jpg', 'resources/lollipops.jpg', 'resources/m_and_m.jpg', 'resources/mac_and_cheese.jpg', 'resources/mashed_potato.jpg', 'resources/mini_muffins.jpg', 'resources/mozarella_sticks.jpg', 'resources/mushrooms.jpg', 'resources/one_percent_milk.jpg', 'resources/orange_slices.jpg', 'resources/OrderA.xlsx', 'resources/OrderB.xlsx', 'resources/OrderC.xlsx', 'resources/OrderD.xlsx', 'resources/PB.jpg', 'resources/peaches.jpg', 'resources/pickles.jpg', 'resources/pizza.jpg', 'resources/pretzels.jpg', 'resources/raisin_bran_w_milk.jpg', 'resources/raisins.jpg', 'resources/reeses.jpg', 'resources/rice_cakes.jpg', 'resources/rigatoni.jpg', 'resources/rigatoni_and_sauce.jpg', 'resources/ritz.jpg', 'resources/salad_w_chicken.jpg', 'resources/saltines.jpg', 'resources/seaweed.jpg', 'resources/skim_milk.jpg', 'resources/soup_with_spoon.jpg', 'resources/sour_patch.jpg', 'resources/soy_chips.jpg', 'resources/steak.jpg', 'resources/strawberries.jpg', 'resources/string_cheese.jpg', 'resources/sushi_w_condiments.jpg', 'resources/tacos.jpg', 'resources/test_eng.xlsx', 'resources/trail_mix.jpg', 'resources/tribe_humus_pita.jpg', 'resources/turkey_sandwich.jpg', 'resources/whole_milk.jpg', 'resources/yellow_popcorn.jpg', 'resources/yogurt_no_spoon.jpg', 'resources/yogurt_pretzels.jpg']
  Screen = 1
  Units = height
  Use version = 2023.2.1
  Window size (pixels) = [1536, 864]
  colPriority = {'': ''}
  color = #000000
  colorSpace = hex
  expName = Food Choice
  keyboardBackend = ioHub
  logging level = data
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Routines
  Routine welcome
    RoutineSettingsComponent welcome
      saveStartStop = False
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    CodeComponent conditions
      Code Type = Both
      Begin Experiment:
        import random
        # determine condition
        condition = expInfo['condition']

        # save some condition info to simplify analysis
        if condition == 'A':
            order = 'healthy-tasty'
            reverse_coding = 'No'
        elif condition == 'C':
            order = 'healthy-tasty'
            reverse_coding = 'Yes'
        elif condition == 'B':
            order = 'tasty-healthy'
            reverse_coding = 'No'
        elif condition == 'D':
            order = 'tasty-healthy'
            reverse_coding = 'Yes'
      Begin JS Experiment:
        import * as random from 'random';
        condition = expInfo["condition"];
        if ((condition === "A")) {
            order = "healthy-tasty";
            reverse_coding = "No";
        } else {
            if ((condition === "C")) {
                order = "healthy-tasty";
                reverse_coding = "Yes";
            } else {
                if ((condition === "B")) {
                    order = "tasty-healthy";
                    reverse_coding = "No";
                } else {
                    if ((condition === "D")) {
                        order = "tasty-healthy";
                        reverse_coding = "Yes";
                    }
                }
            }
        }
        psychoJS.experiment.addData("condition", condition);
        psychoJS.experiment.addData("order", order);
        psychoJS.experiment.addData("reverse_coding", reverse_coding);
      Each Frame:
        # hide mouse
        win.mouseVisible = False
    TextComponent welcome_text
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        Welcome to the experiment!


        Press SPACE to start the experiment.
    KeyboardComponent key_resp_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine photo_keys
    RoutineSettingsComponent photo_keys
      saveStartStop = False
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    KeyboardComponent start_of_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent photo_keyboard
      image = resources/keyboard.jpg
      pos = (0, -0.15)
      saveStartStop = False
      size = (0.7, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_1
      letterHeight = 0.035
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This experiment consists of three parts. In each part, you will be asked to respond on a scale from 1 to 5.

        Give your response by using the keys 1, 2, 3, 4, 5, positioned in the top left corner of the keyboard, as shown in the photo.
    TextComponent text_1_2
      letterHeight = 0.035
      pos = (0, -0.38)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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  Routine inst_1
    RoutineSettingsComponent inst_1
      saveStartStop = False
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    TextComponent inst_text1
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $inst1
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    KeyboardComponent inst_key1
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine inst_2
    RoutineSettingsComponent inst_2
      saveStartStop = False
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    TextComponent inst_text2
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $inst2
    KeyboardComponent inst_key2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine inst_3
    RoutineSettingsComponent inst_3
      saveStartStop = False
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    TextComponent inst_text3
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $inst3
    KeyboardComponent inst_key3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation
    RoutineSettingsComponent fixation
      saveStartStop = False
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    CodeComponent fixation_time
      Code Type = Both
      Begin Experiment:
        #set-up for saving onset and offset times
        FixationOnset = core.Clock()
        FixationOffset = core.Clock()

        StimulusOnset = core.Clock()
        StimulusOffset = core.Clock()

        ReferenceOnset = core.Clock()
        ReferenceOffset = core.Clock()

        ref_list = []
      Begin JS Experiment:
        FixationOnset = new util.Clock();
        FixationOffset = new util.Clock();
        StimulusOnset = new util.Clock();
        StimulusOffset = new util.Clock();
        ReferenceOnset = new util.Clock();
        ReferenceOffset = new util.Clock();
        ref_list = [];
      Begin JS Routine:
        flength = (0.5 + Math.random());
        psychoJS.experiment.addData("FixationLength", flength);
        psychoJS.experiment.addData("FixationOnset", FixationOnset.getTime());
      Begin Routine:
        thisExp.addData ('block', rating_block)
        thisExp.addData('order', order)
        thisExp.addData('reverse_coding', reverse_coding)

        #fixation presentation will vary between 500 ms and 1500 ms
        flength = 0.5 + random.random()
        thisExp.addData('FixationLength', flength)

        #save onset of fixation cross
        thisExp.addData('FixationOnset', FixationOnset.getTime())
      End JS Routine:
        psychoJS.experiment.addData("FixationOffset", FixationOffset.getTime());
      End Routine:
        #save offset of fixation cross
        thisExp.addData('FixationOffset', FixationOffset.getTime())
    PolygonComponent fixation_cross
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.035, 0.035)
      startVal [time (s)] = 0
      stopVal [duration (s)] = flength
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  Routine food_rating
    RoutineSettingsComponent food_rating
      saveStartStop = False
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    CodeComponent image_time
      Code Type = Both
      Begin Experiment:
        # precreate the empty food list
        food_list = []
      Begin JS Experiment:
        // precreate the empty food list
        food_list = [];
      Begin JS Routine:
        food_already_there = false;

        // save onset of stimulus
        psychoJS.experiment.addData("StimulusOnset", StimulusOnset.getTime());

        // fill the food list
        if (food_list.length) {
            for (var index, _pj_c = 0, _pj_a = util.range(food_list.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                index = _pj_a[_pj_c];
                if ((food_list[index][0] === food)) {
                    food_already_there = true;
                    current_food_index = index;
                    break;
                }
            }
        }

        if ((! food_already_there)) {
            food_list.push([food, undefined, undefined]);
            current_food_index = (food_list.length - 1);
        }
      Begin Routine:
        food_already_there = False

        #save onset of stimulus
        thisExp.addData('StimulusOnset', StimulusOnset.getTime())

        # fill the food list
        if len(food_list):
            for index in range(len(food_list)):
                if food_list[index][0] == food:
                    food_already_there = True
                    current_food_index = index
                    break

        if not food_already_there:
            food_list.append ([food, None, None])
            current_food_index = len(food_list)-1
      End JS Routine:
        psychoJS.experiment.addData("StimulusOffset", StimulusOffset.getTime());
        psychoJS.experiment.addData("current_food", food);
        psychoJS.experiment.addData("fat", fat);
      End Routine:
        #save offset of stimulus
        thisExp.addData('StimulusOffset', StimulusOffset.getTime())
        thisExp.addData('current_food', food)
    ImageComponent image
      image [set every repeat] = $'resources/' + food
      pos = (0, 0.11)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      texture resolution = 512
      units = height
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    TextComponent rating_labels
      contrast = 0/035
      letterHeight = 0.035
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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      text [set every repeat]:
        $rating
    KeyboardComponent rating_keys
      allowedKeys [set every repeat] = ['1','2','3','4','5']
      correctAns = '1', '2', '3', '4', '5'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      store = first key
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  Routine end_of_block
    RoutineSettingsComponent end_of_block
      saveStartStop = False
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    TextComponent end_of_block_text
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        End of the block.

        Press SPACE to continue.
    KeyboardComponent end_of_block_keypress
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine choice_inst1
    RoutineSettingsComponent choice_inst1
      saveStartStop = False
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    CodeComponent choose_reference
      Code Type = Auto->JS
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      Begin Routine:
        ref_food = ''

        # Find the reference
        for i in range(len(food_list)):
            if (food_list[i][1] == '3' and food_list[i][2] == '3'):
                ref_food = food_list[i][0]
                ref_image.setImage('resources/' + ref_food)
                break

        if ref_food == '':
            for i in range(len(food_list)):
                if (food_list[i][1] == '3' and (food_list[i][2] == '2' or food_list[i][2] == '4')):
                    ref_food = food_list[i][0]
                    ref_image.setImage('resources/' + ref_food)
                    break

        if ref_food == '':
            for i in range(len(food_list)):
                if (food_list[i][2] == '3' and (food_list[i][1] == '2' or food_list[i][1] == '4')):
                    ref_food = food_list[i][0]
                    ref_image.setImage('resources/' + ref_food)
                    break

        if ref_food == '':
            ref_food = 'saltines.jpg'
            ref_image.setImage('resources/' + ref_food)
    ImageComponent ref_image
      ori [set every repeat] = 0
      pos = (0, -0.15)
      saveStartStop = False
      size = (0.45,0.45)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent c_inst1_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent c_inst1_text
      letterHeight = 0.035
      pos = (0, 0.23)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now, you will be asked to choose which food you want to eat. For each photo, you will see this reference food on the left side - it's always the same. On the right side, the food will change for each trial.

        Press SPACE to continue.
  Routine choice_inst3
    RoutineSettingsComponent choice_inst3
      saveStartStop = False
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    TextComponent c_inst3_text
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please ensure that your choices accurately reflect your preferences.

        After the task, one of the items that you have answered will be chosen randomly. The choice that you made there then counts as your choice in the task. Imagine that after the task, you have to eat a snack-sized portion of the choice you made.

        Press SPACE to continue.
    KeyboardComponent c_inst3_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine choice_inst2
    RoutineSettingsComponent choice_inst2
      saveStartStop = False
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    TextComponent c_inst2_text
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        For each picture, indicate whether you
        Prefer or Strongly prefer the food on the right
        or instead
        Prefer or Strongly prefer the reference food on the left.
        If you really cannot choose between the two pictures,
        you may indicate Neutral.


        (1) ------- (2) ------- (3) ------- (4) ------- (5)
        Strongly prefer -- Prefer -- Neutral -- Prefer -- Strongly prefer

        Press SPACE to continue.
    KeyboardComponent c_inst2_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine food_choice
    RoutineSettingsComponent food_choice
      saveStartStop = False
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    CodeComponent no_same_food
      Code Type = Both
      Begin JS Routine:
        if ((food !== ref_food)) {
            main_loop_choice.addData("reference_item", ref_food);
            main_loop_choice.addData("item_to_compare", food);
        } else {
            continueRoutine = false;
            repeat_loop_choice.finished = true;
        }
      Begin Routine:
        if food != ref_food:
            main_loop_choice.addData('reference_item', ref_food)
            main_loop_choice.addData('item_to_compare', food)
        else:
            continueRoutine = False
            repeat_loop_choice.finished = True
    ImageComponent image_left
      image [set every repeat] = $'resources/' + ref_food
      pos [set every repeat] = (-0.25, 0.15)
      saveStartStop = False
      size [set every repeat] = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      units = height
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    ImageComponent image_right
      image [set every repeat] = $'resources/' + food
      pos [set every repeat] = (0.25, 0.15)
      saveStartStop = False
      size [set every repeat] = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      units = height
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    KeyboardComponent c_rating
      allowedKeys = ['1','2','3','4','5']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      store = first key
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    TextComponent text_12
      letterHeight = 0.035
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        (1) ------- (2) ------- (3) ------- (4) ------- (5)
        Strongly prefer -- Prefer -- Neutral -- Prefer -- Strongly prefer
  Routine feedback_rating
    RoutineSettingsComponent feedback_rating
      saveStartStop = False
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    CodeComponent message
      Code Type = Auto->JS
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      Begin Experiment:
        msg=''
      Begin Routine:
        a = ['1', '2', '3', '4', '5']

        # If response, remove the rating labels
        if rating_keys.keys in a:
            post_image.setImage('resources/' + food)
            food_list[current_food_index][block.thisN+1]=rating_keys.keys
            msg = ''
            feedback = 4 - rating_keys.rt

        # If no response in 4ms, show 'Too late!'
        else:
            post_image.setImage('resources/blank.png')
            msg= "Too late!"
            feedback = 1
      End Routine:
        c = ['1', '2', '3', '4', '5']

        if rating_keys.keys in c:
            repeat_loop.finished = True
    ImageComponent post_image
      pos = (0, 0.11)
      saveStartStop = False
      size = (0.5,0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = feedback
      units = height
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    TextComponent too_late_text
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = feedback
      text [set every repeat] = $msg
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  Routine feedback_choice
    RoutineSettingsComponent feedback_choice
      saveStartStop = False
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    CodeComponent choice_feedback_code
      Code Type = Auto->JS
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      Begin Experiment:
        msg = ''
      Begin Routine:
        # stop if current food is the reference food
        if food == ref_food:
            continueRoutine = False
            repeat_loop_choice.finished = True

        # save rating helpers
        # participant prefered the reference food
        if  c_rating.keys in ['1', '2']:
            msg = ''
            feedback = 4 - c_rating.rt
            reference_image.setImage('resources/' + ref_food)
            image_to_compare.setImage('resources/' + food)
            prefered_food = ref_food
            main_loop_choice.addData('chosen_item', prefered_food)

        # participant prefered the other food
        elif  c_rating.keys in ['4', '5']:
            msg = ''
            feedback = 4 - c_rating.rt
            reference_image.setImage('resources/' + ref_food)
            image_to_compare.setImage('resources/' + food)
            prefered_food = food
            main_loop_choice.addData('chosen_item', prefered_food)

        # participant had no preference
        elif c_rating.keys in ['3']:
            msg = ''
            feedback = 4 - c_rating.rt
            reference_image.setImage('resources/' + ref_food)
            image_to_compare.setImage('resources/' + food)
            prefered_food = 'No preference'
            main_loop_choice.addData('chosen_item', prefered_food)

        # participant did not respond
        else:
            reference_image.setImage('resources/blank.png')
            image_to_compare.setImage('resources/blank.png')
            msg= "Too late!"
            feedback = 1
      End Routine:
        b = ['1', '2', '3', '4', '5']
        if c_rating.keys in b:
            repeat_loop_choice.finished = True

        thisExp.addData('block', 'choice')
    TextComponent feedback_c
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = feedback
      text [set every repeat] = $msg
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    ImageComponent reference_image
      pos = (-0.25, 0.15)
      saveStartStop = False
      size = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = feedback
      units = height
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    ImageComponent image_to_compare
      pos = (0.25, 0.15)
      saveStartStop = False
      size = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = feedback
      units = height
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  Routine the_end
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    TextComponent text_end
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for your participation!

        Press SPACE to close the experiment.
    KeyboardComponent key_end
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine intro
    RoutineSettingsComponent intro
      saveStartStop = False
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    TextComponent intro_text
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have approximately four seconds to respond each time. If it takes too long to respond to an image, the words "TOO LATE!" will appear on the screen. Don't worry about this. It simply gives you an indication of how much time you have to respond.

        The first response you give for each trial will be recorded. After your response has been registered, you must wait a moment before the next trial begins.
        Press SPACE to start the first part of the experiment.
    KeyboardComponent start_loop
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fix_text
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    CodeComponent code_fix_text
      Code Type = Auto->JS
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      Begin Experiment:
        def escape_quotes(string):
            return string.replace('"', '""')
      Begin Routine:
        def escape_quotes(string):
            return string.replace('"', '""')
Flow
  Routine welcome
  Routine photo_keys
  Routine intro
  LoopInitiator block loopType="TrialHandler"
    conditionsFile = $'resources/Order' + condition + '.xlsx'
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine inst_1
    Routine inst_2
    Routine inst_3
    LoopInitiator main_loop_rating loopType="TrialHandler"
      conditionsFile = resources/food_list_eng.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'food': 'air_popcorn.jpg', 'fat': 0},
        {'food': 'american_cheese.jpg', 'fat': 1},
        {'food': 'apple_slices.jpg', 'fat': 0},
        {'food': 'avacado.jpg', 'fat': 1},
        {'food': 'baby_cheese.jpg', 'fat': 1},
        {'food': 'bagel_and_cc.jpg', 'fat': 1},
        {'food': 'bagel_plain.jpg', 'fat': 0},
        {'food': 'baguette_oil.jpg', 'fat': 1},
        {'food': 'baked_potato.jpg', 'fat': 0},
        {'food': 'banana.jpg', 'fat': 0},
        {'food': 'broccoli_cauliflower.jpg', 'fat': 0},
        {'food': 'brownie.jpg', 'fat': 1},
        {'food': 'burger.jpg', 'fat': 1},
        {'food': 'celery_and_carrot_sticks.jpg', 'fat': 0},
        {'food': 'cheese_nachos.jpg', 'fat': 1},
        {'food': 'cherries.jpg', 'fat': 0},
        {'food': 'cherry_tomato.jpg', 'fat': 0},
        {'food': 'chicken_nuggets.jpg', 'fat': 1},
        {'food': 'cookies.jpg', 'fat': 1},
        {'food': 'corn_cob.jpg', 'fat': 0},
        {'food': 'cucumber_slices.jpg', 'fat': 0},
        {'food': 'cupcakes_am.jpg', 'fat': 1},
        {'food': 'doughnuts.jpg', 'fat': 1},
        {'food': 'eggs.jpg', 'fat': 1},
        {'food': 'french_fries.jpg', 'fat': 1},
        {'food': 'fried_eggs.jpg', 'fat': 1},
        {'food': 'froot_loops_w_milk.jpg', 'fat': 0},
        {'food': 'granola_w_milk.jpg', 'fat': 1},
        {'food': 'grapes.jpg', 'fat': 0},
        {'food': 'green_beans.jpg', 'fat': 0},
        {'food': 'grilled_cheese.jpg', 'fat': 1},
        {'food': 'grilled_chicken_strips.jpg', 'fat': 0},
        {'food': 'hershey_kisses.jpg', 'fat': 1},
        {'food': 'hotdog_w_must.jpg', 'fat': 1},
        {'food': 'ice_cream_sundae.jpg', 'fat': 1},
        {'food': 'kiwi.jpg', 'fat': 0},
        {'food': 'lollipops.jpg', 'fat': 0},
        {'food': 'mac_and_cheese.jpg', 'fat': 1},
        {'food': 'mashed_potato.jpg', 'fat': 1}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
      LoopInitiator repeat_loop loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = 2
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        Routine fixation
        Routine food_rating
        Routine feedback_rating
      LoopTerminator repeat_loop
    LoopTerminator main_loop_rating
    Routine end_of_block
  LoopTerminator block
  Routine choice_inst1
  Routine choice_inst2
  Routine choice_inst3
  LoopInitiator main_loop_choice loopType="TrialHandler"
    conditionsFile = resources/food_list_eng.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    LoopInitiator repeat_loop_choice loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 2
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      Routine fixation
      Routine food_choice
      Routine feedback_choice
    LoopTerminator repeat_loop_choice
  LoopTerminator main_loop_choice
  Routine the_end
